PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'gender': '', 'age': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1366, 768]
  expName = Flex_no_Flex_Ger
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Routines
  Routine Instructions
    TextComponent Instructions_
      letterHeight = 0.03
      opacity = 2
      units = height
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      text:
        Bem-vind@,

        Durante esta tarefa irá ler frases. Peço-lhe que leia e que responda com a máxima atenção com aquilo que julga que corresponde ao Português Europeu Padrão. As respostas que dará estão organizadas numa escala de valores organizadas de 1 a 5. Utilize as teclas numéricas de 1 a 5 no seu computador para responder.

        1 - Discordo totalmente.
        2 - Discordo.
        3 - Neutro.
        4 - Concordo.
        5 - Concordo totalmente.

        Carrega na tecla de espaço para continuar.
    KeyboardComponent key_resp_block_1
      allowedKeys = 'space'
      forceEndRoutine = True
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  Routine Ending
    TextComponent Ending_Block
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Muito obrigado pela tua participação! ☺
      units = height
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  Routine Trial
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $Sentence
      units = height
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
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  Routine Cross
    TextComponent cross_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = +
      units = height
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimulus\Stimulus.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Item': 1, 'Sentence': 'A Joana está a compreender a explicação', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 2, 'Sentence': 'A Joana está compreendendo a explicação', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 3, 'Sentence': 'O Pedro está a ver televisão', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 4, 'Sentence': 'O Pedro está vendo televisão', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 5, 'Sentence': 'A Marina está a ler um livro', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 6, 'Sentence': 'A Marina está lendo um livro', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 7, 'Sentence': 'A Raquel está a chorar', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 8, 'Sentence': 'A Raquel está chorando', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 9, 'Sentence': 'O Rafael está a correr', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 10, 'Sentence': 'O Rafael está correndo', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 11, 'Sentence': 'A Raquel está a reclamar', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 12, 'Sentence': 'A Raquel está reclamando', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 13, 'Sentence': 'A Ana está a cantar', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 14, 'Sentence': 'A Ana está cantando', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 15, 'Sentence': 'O Ricardo está a tocar piano', 'Correct': 'S', 'Form': 'Aspect'},
      {'Item': 16, 'Sentence': 'O Ricardo está tocando piano', 'Correct': 'N', 'Form': 'Gerund'},
      {'Item': 17, 'Sentence': 'A Isabel está a fazer o almoço', 'Correct': 'S', 'Form': 'Aspect'}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
    Routine Trial
    Routine Cross
  LoopTerminator trials
  Routine Ending
